PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  color = $[-1.000,-1.000,-1.000]
  expName = Recognition_Memory_Task_Advanced
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Routines
  Routine Welcome_Screen
    TextComponent Welcome_Screen_Text
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
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      text:
                        Welcome to our experiment!

        Please go over the instructions, and proceed with the experiement.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent Instructions_for_Memory_task
      letterHeight = 0.04
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
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      text:
                            Recognition Memory Experiment - Instructions:

        In this task, you will be presented with words (either red, or green, in colour) in the 'study phase'. After the studying these words in the 'study phase', you will  be shown equal number of "new" words in the 'test phase'. In the test phase, words from the 'study phase' are mixed in with new words.

        For each word in the 'test phase':

        1. You have to decide if you have seen the word before, or not, and provide a response accordingly (press a key ranging from 1 to 6) on a confidence scale from 1 (new word, from test phase) to 6 (old word, from study phase).
        2. Following the confidence scale response, give a feedback as to whether you have re-collected the old word (press 'r'), you feel familiar seeing the old word (press 'f'), or neither of these two: if you don't think it's an old word (press 'n').

                     Esc will abort experiment. Please press any key to start!
    KeyboardComponent Instructions_Keyboard
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Study_Phase
    TextComponent Study_Phase_Word
      color [set every repeat] = $WordColor
      letterHeight = 0.075
      pos = (0.9, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $WordItem
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  Routine Blank_Screen_500_ms
    TextComponent Blank_Screen_No_Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Wait_Screen
    TextComponent Wait_Screen_Text
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Please press any key when you are ready to start the test phase.
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    KeyboardComponent Wait_Screen_Keyboard
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End_Screen
    TextComponent End_Screen_Text
      letterHeight = 0.05
      pos = (0.7, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating!
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  Routine Test_Phase_Conf
    TextComponent Test_Phase_Word
      letterHeight = 0.075
      pos = (0.9, 0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $WordItem
    KeyboardComponent Test_Phase_Key_Confidence_Response
      allowedKeys = '6','5','4','3','2','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Test_Phase_Confidence_Scale
      color = $[0.506,0.506,0.506]
      letterHeight = 0.05
      pos = (0.85, -0.5)
      startVal [time (s)] = 0.0
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      text:
        Confidence Scale

        1   2   3   4   5   6

        New                 Old
  Routine Test_Phase_RFN
    TextComponent Test_Phase_RFN_Text
      letterHeight = 0.075
      pos = (0.9, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    KeyboardComponent Test_Phase_Key_Resp
      allowedKeys = 'r','f','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Test_Phase_RFN_Scale
      color = $[0.506,0.506,0.506]
      letterHeight = 0.05
      pos = (0.8, -0.5)
      startVal [time (s)] = 0.0
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      text:
        (R)e-experience/(R)e-collection
        (F)amiliar
        (N)either
  Routine Test_Phase_Blank_500_ms
    TextComponent Test_Phase_Blank_Text
      letterHeight = 0.075
      pos = (0.9, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $WordItem
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Flow
  Routine Welcome_Screen
  Routine Instructions
  Routine Blank_Screen_500_ms
  LoopInitiator Study_Phase_Trials loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = ..\Recognition_Memory_Task_Stimulus.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Rand', 0.026691337538999327), ('WordItem', 'Lose'), ('LongShort', 'Short'), ('OldNew', 'Old'), ('WordColor', 'Red')]),
      OrderedDict([('Rand', 0.45518196058485205), ('WordItem', 'Faster'), ('LongShort', 'Short'), ('OldNew', 'Old'), ('WordColor', 'Green')]),
      OrderedDict([('Rand', 0.19285567291837702), ('WordItem', 'Interested'), ('LongShort', 'Long'), ('OldNew', 'Old'), ('WordColor', 'Green')]),
      OrderedDict([('Rand', 0.6302727787208893), ('WordItem', 'Father'), ('LongShort', 'Short'), ('OldNew', 'Old'), ('WordColor', 'Green')]),
      OrderedDict([('Rand', 0.562707924243791), ('WordItem', 'Further'), ('LongShort', 'Long'), ('OldNew', 'Old'), ('WordColor', 'Red')]),
      OrderedDict([('Rand', 0.3414026603787583), ('WordItem', 'Uninterested'), ('LongShort', 'Long'), ('OldNew', 'Old'), ('WordColor', 'Red')]),
      OrderedDict([('Rand', 0.7484199966651124), ('WordItem', 'Mouse'), ('LongShort', 'Short'), ('OldNew', 'New'), ('WordColor', None)]),
      OrderedDict([('Rand', 0.09872666254727558), ('WordItem', 'Effect'), ('LongShort', 'Short'), ('OldNew', 'New'), ('WordColor', None)]),
      OrderedDict([('Rand', 0.22981496179219907), ('WordItem', 'Loose'), ('LongShort', 'Short'), ('OldNew', 'New'), ('WordColor', None)]),
      OrderedDict([('Rand', 0.21999228343244814), ('WordItem', 'Desert'), ('LongShort', 'Short'), ('OldNew', 'New'), ('WordColor', None)]),
      OrderedDict([('Rand', 0.01317376321665209), ('WordItem', 'Look'), ('LongShort', 'Short'), ('OldNew', 'New'), ('WordColor', None)])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
    Routine Study_Phase
    Routine Blank_Screen_500_ms
  LoopTerminator Study_Phase_Trials
  Routine Wait_Screen
  Routine Blank_Screen_500_ms
  LoopInitiator Test_Phase_Trials loopType="TrialHandler"
    Selected rows = 0:12
    conditionsFile = ..\Recognition_Memory_Task_Stimulus.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Rand', 0.026691337538999327), ('WordItem', 'Lose'), ('LongShort', 'Short'), ('OldNew', 'Old'), ('WordColor', 'Red')]),
      OrderedDict([('Rand', 0.45518196058485205), ('WordItem', 'Faster'), ('LongShort', 'Short'), ('OldNew', 'Old'), ('WordColor', 'Green')]),
      OrderedDict([('Rand', 0.19285567291837702), ('WordItem', 'Interested'), ('LongShort', 'Long'), ('OldNew', 'Old'), ('WordColor', 'Green')]),
      OrderedDict([('Rand', 0.6302727787208893), ('WordItem', 'Father'), ('LongShort', 'Short'), ('OldNew', 'Old'), ('WordColor', 'Green')]),
      OrderedDict([('Rand', 0.562707924243791), ('WordItem', 'Further'), ('LongShort', 'Long'), ('OldNew', 'Old'), ('WordColor', 'Red')]),
      OrderedDict([('Rand', 0.3414026603787583), ('WordItem', 'Uninterested'), ('LongShort', 'Long'), ('OldNew', 'Old'), ('WordColor', 'Red')]),
      OrderedDict([('Rand', 0.7484199966651124), ('WordItem', 'Mouse'), ('LongShort', 'Short'), ('OldNew', 'New'), ('WordColor', None)]),
      OrderedDict([('Rand', 0.09872666254727558), ('WordItem', 'Effect'), ('LongShort', 'Short'), ('OldNew', 'New'), ('WordColor', None)]),
      OrderedDict([('Rand', 0.22981496179219907), ('WordItem', 'Loose'), ('LongShort', 'Short'), ('OldNew', 'New'), ('WordColor', None)]),
      OrderedDict([('Rand', 0.21999228343244814), ('WordItem', 'Desert'), ('LongShort', 'Short'), ('OldNew', 'New'), ('WordColor', None)]),
      OrderedDict([('Rand', 0.01317376321665209), ('WordItem', 'Look'), ('LongShort', 'Short'), ('OldNew', 'New'), ('WordColor', None)])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
    Routine Test_Phase_Conf
    Routine Test_Phase_Blank_500_ms
    Routine Test_Phase_RFN
    Routine Blank_Screen_500_ms
  LoopTerminator Test_Phase_Trials
  Routine End_Screen
